### Energy filters ###
d:Sc/EnergyATGasGap00/OnlyIncludeIfIncidentParticleKEAbove = 100. keV
d:Sc/EnergyATGasGap01/OnlyIncludeIfIncidentParticleKEAbove = 100. keV


### PhaseSpace no GasGap00 Lithium ###
s:Sc/PSpaceL00/Quantity                    = "PhaseSpace"
b:Sc/PSpaceL00/OutputToConsole             = "True"
s:Sc/PSpaceL00/Surface                     = "GasGap00/ZMinusSurface"
s:Sc/PSpaceL00/OutputType                  = "ASCII" # ASCII, Binary, Limited or ROOT 
s:Sc/PSpaceL00/OutputFile                  = "LithiumOutput00"
i:Sc/PSpaceL00/OutputBufferSize            = 1000
#s:Sc/PSpaceL00/OnlyIncludeParticlesGoing  = "In"
s:Sc/PSpaceL00/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/PSpaceL00/IncludePhysicalProcessName  = "True"
b:Sc/PSpaceL00/IncludeTOPASTime            = "True"
b:Sc/PSpaceL00/IncludeEventID = "True"
b:Sc/PSpaceL00/IncludeTrackID = "True"
b:Sc/PSpaceL00/IncludeParentID = "False"
b:Sc/PSpaceL00/IncludeStepNumber = "True"
b:Sc/PSpaceL00/IncludeGlobalTime = "False"
b:Sc/PSpaceL00/IncludeEnergyDeposited = "True"
b:Sc/PSpaceL00/IncludeVolumeName = "True"
i:Sc/PSpaceL00/OnlyIncludeParticlesOfAtomicNumber = 3
i:Sc/PSpaceL00/OnlyIncludeParticlesOfAtomicMass = 7


### PhaseSpace no GasGap00 Alpha ###
s:Sc/PSpaceA00/Quantity                    = "PhaseSpace"
b:Sc/PSpaceA00/OutputToConsole             = "True"
s:Sc/PSpaceA00/Surface                     = "GasGap00/ZMinusSurface"
s:Sc/PSpaceA00/OutputType                  = "ASCII" # ASCII, Binary, Limited or ROOT 
s:Sc/PSpaceA00/OutputFile                  = "AlphaOutput00"
i:Sc/PSpaceA00/OutputBufferSize            = 1000
#s:Sc/PSpaceA00/OnlyIncludeParticlesGoing  = "In"
s:Sc/PSpaceA00/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/PSpaceA00/IncludePhysicalProcessName  = "True"
b:Sc/PSpaceA00/IncludeTOPASTime            = "True"
b:Sc/PSpaceA00/IncludeEventID = "True"
b:Sc/PSpaceA00/IncludeTrackID = "True"
b:Sc/PSpaceA00/IncludeParentID = "False"
b:Sc/PSpaceA00/IncludeStepNumber = "True"
b:Sc/PSpaceA00/IncludeGlobalTime = "False"
b:Sc/PSpaceA00/IncludeEnergyDeposited = "True"
b:Sc/PSpaceA00/IncludeVolumeName = "True"
i:Sc/PSpaceA00/OnlyIncludeParticlesOfAtomicNumber = 2
i:Sc/PSpaceA00/OnlyIncludeParticlesOfAtomicMass = 4


### PhaseSpace no GasGap01 Lithium ###
s:Sc/PSpaceL01/Quantity                    = "PhaseSpace"
b:Sc/PSpaceL01/OutputToConsole             = "True"
s:Sc/PSpaceL01/Surface                     = "GasGap01/ZMinusSurface"
s:Sc/PSpaceL01/OutputType                  = "ASCII" # ASCII, Binary, Limited or ROOT 
s:Sc/PSpaceL01/OutputFile                  = "LithiumOutput01"
i:Sc/PSpaceL01/OutputBufferSize            = 1000
s:Sc/PSpaceL01/OnlyIncludeParticlesGoing  = "In"
s:Sc/PSpaceL01/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/PSpaceL01/IncludePhysicalProcessName  = "True"
b:Sc/PSpaceL01/IncludeTOPASTime            = "True"
b:Sc/PSpaceL01/IncludeEventID = "True"
b:Sc/PSpaceL01/IncludeTrackID = "True"
b:Sc/PSpaceL01/IncludeParentID = "False"
b:Sc/PSpaceL01/IncludeStepNumber = "True"
b:Sc/PSpaceL01/IncludeGlobalTime = "False"
b:Sc/PSpaceL01/IncludeEnergyDeposited = "True"
b:Sc/PSpaceL01/IncludeVolumeName = "True"
i:Sc/PSpaceL01/OnlyIncludeParticlesOfAtomicNumber = 3
i:Sc/PSpaceL01/OnlyIncludeParticlesOfAtomicMass = 7


### PhaseSpace no GasGap01 Alpha ###
s:Sc/PSpaceA01/Quantity                    = "PhaseSpace"
b:Sc/PSpaceA01/OutputToConsole             = "True"
s:Sc/PSpaceA01/Surface                     = "GasGap01/ZMinusSurface"
s:Sc/PSpaceA01/OutputType                  = "ASCII" # ASCII, Binary, Limited or ROOT 
s:Sc/PSpaceA01/OutputFile                  = "AlphaOutput01"
i:Sc/PSpaceA01/OutputBufferSize            = 1000
s:Sc/PSpaceA01/OnlyIncludeParticlesGoing  = "In"
s:Sc/PSpaceA01/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/PSpaceA01/IncludePhysicalProcessName  = "True"
b:Sc/PSpaceA01/IncludeTOPASTime            = "True"
b:Sc/PSpaceA01/IncludeEventID = "True"
b:Sc/PSpaceA01/IncludeTrackID = "True"
b:Sc/PSpaceA01/IncludeParentID = "False"
b:Sc/PSpaceA01/IncludeStepNumber = "True"
b:Sc/PSpaceA01/IncludeGlobalTime = "False"
b:Sc/PSpaceA01/IncludeEnergyDeposited = "True"
b:Sc/PSpaceA01/IncludeVolumeName = "True"
i:Sc/PSpaceA01/OnlyIncludeParticlesOfAtomicNumber = 2
i:Sc/PSpaceA01/OnlyIncludeParticlesOfAtomicMass = 4